<CompuCell3D Revision="20170130" Version="3.7.5">
   
<Metadata>
   
   <!-- Basic properties simulation -->
   <NumberOfProcessors>2</NumberOfProcessors>
   <DebugOutputFrequency>100</DebugOutputFrequency>
   <!-- <NonParallelModule Name="Potts"/> -->
</Metadata>
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="1200" y="1600" z="1"/>
      <Steps>18300</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <LatticeType>Square</LatticeType>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
      <CellType TypeId="3" TypeName="3"/>
      <CellType TypeId="4" TypeName="4"/>
      <CellType TypeId="5" TypeName="5"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <Plugin Name="ExternalPotential">
      
      <!-- External force applied to cell. Each cell has different force and force components have to be managed in Python. -->
      <!-- e.g. cell.lambdaVecX=0.5; cell.lambdaVecY=0.1 ; cell.lambdaVecZ=0.3; -->
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="MomentOfInertia">
      
      <!-- Module tracking moment of inertia of each cell -->
   </Plugin>
   
   <Plugin Name="PixelTracker">
      
      <!-- Module tracking pixels of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">12.0</Energy>
      <Energy Type1="Medium" Type2="1">13.0</Energy>
      <Energy Type1="Medium" Type2="2">13.0</Energy>
      <Energy Type1="Medium" Type2="3">13.0</Energy>
      <Energy Type1="Medium" Type2="4">13.0</Energy>
      <Energy Type1="Medium" Type2="5">13.0</Energy>
      <Energy Type1="1" Type2="1">12.0</Energy>
      <Energy Type1="1" Type2="2">12.0</Energy>
      <Energy Type1="1" Type2="3">12.0</Energy>
      <Energy Type1="1" Type2="4">12.0</Energy>
      <Energy Type1="1" Type2="5">12.0</Energy>
      <Energy Type1="2" Type2="2">12.0</Energy>
      <Energy Type1="2" Type2="3">12.0</Energy>
      <Energy Type1="2" Type2="4">12.0</Energy>
      <Energy Type1="2" Type2="5">12.0</Energy>
      <Energy Type1="3" Type2="3">12.0</Energy>
      <Energy Type1="3" Type2="4">12.0</Energy>
      <Energy Type1="3" Type2="5">12.0</Energy>
      <Energy Type1="4" Type2="4">12.0</Energy>
      <Energy Type1="4" Type2="5">12.0</Energy>
      <Energy Type1="5" Type2="5">12.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
<!--    <Plugin Name="ConnectivityGlobal"> -->
      
      <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified for each type  -->
      <!-- This constraint works in 2D and 3D on all type of lattices. It might be slowdown your simulation. For faster option - 2D and square lattice you may use Connectivity or ConnectivityLocalFlex -->
      <!-- To speed up simulation comment out unnecessary constraints for types which don't need the constraint -->
      <!-- By default we will always precheck connectivity BUT in simulations in which there is no risk of having unfragmented cell one can add this flag to speed up computations -->
      <!-- To turn off precheck uncomment line below -->
      <!-- <DoNotPrecheckConnectivity/> -->
<!--       <Penalty Type="1">1000000</Penalty> -->
<!--       <Penalty Type="2">1000000</Penalty> -->
<!--       <Penalty Type="3">1000000</Penalty> -->
<!--       <Penalty Type="4">1000000</Penalty> -->
<!--    </Plugin> -->
   
   <Steppable Type="PIFInitializer">
      
      <!-- Initial layout of cells using PIFF file. Piff files can be generated using PIFGEnerator -->
      <PIFName>Simulation/WTcontrol.piff</PIFName>
   </Steppable>
   
   <Steppable Frequency="1000" Type="PIFDumper">
      
      <!-- Periodically stores cell layout configuration in a piff format -->
      <PIFName>WTcontrol</PIFName>
      <PIFFileExtension>piff</PIFFileExtension>
   </Steppable>
</CompuCell3D>
