    <CompuCell3D Revision="20170130" Version="3.7.5">
   
<Metadata>
   
   <!-- Basic properties simulation -->
   <NumberOfProcessors>2</NumberOfProcessors>
   <DebugOutputFrequency>100</DebugOutputFrequency>
   <!-- <NonParallelModule Name="Potts"/> -->
</Metadata>
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="1200" y="1600" z="1"/>
      <Steps>18200</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <LatticeType>Square</LatticeType>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="1"/>
      <CellType TypeId="2" TypeName="2"/>
      <CellType TypeId="3" TypeName="3"/>
      <CellType TypeId="4" TypeName="4"/>
      <CellType TypeId="5" TypeName="5"/>
      <CellType TypeId="6" TypeName="6"/>
      <CellType TypeId="7" TypeName="7"/>
      <CellType TypeId="8" TypeName="8"/>
      <CellType TypeId="9" TypeName="9"/>
      <CellType TypeId="10" TypeName="10"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   
  
   <Plugin Name="ExternalPotential">
      
      <!-- External force applied to cell. Each cell has different force and force components have to be managed in Python. -->
      <!-- e.g. cell.lambdaVecX=0.5; cell.lambdaVecY=0.1 ; cell.lambdaVecZ=0.3; -->
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="MomentOfInertia">
      
      <!-- Module tracking moment of inertia of each cell -->
   </Plugin>
   
   <Plugin Name="PixelTracker">
      
      <!-- Module tracking pixels of each cell -->
   </Plugin>
   
   <Plugin Name="BoundaryPixelTracker">
         
      <!-- Module tracking pixels of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="1">10.0</Energy>
      <Energy Type1="Medium" Type2="2">9.0</Energy>
      <Energy Type1="Medium" Type2="3">10.0</Energy>
      <Energy Type1="Medium" Type2="4">9.0</Energy>
      <Energy Type1="Medium" Type2="5">10.0</Energy>
      <Energy Type1="Medium" Type2="6">9.0</Energy>
      <Energy Type1="Medium" Type2="7">10.0</Energy>
      <Energy Type1="Medium" Type2="8">9.0</Energy>
      <Energy Type1="Medium" Type2="9">10.0</Energy>
      <Energy Type1="Medium" Type2="10">9.0</Energy>
      <Energy Type1="1" Type2="1">8.0</Energy>
      <Energy Type1="1" Type2="2">20.0</Energy>
      <Energy Type1="1" Type2="3">8.0</Energy>
      <Energy Type1="1" Type2="4">20.0</Energy>
      <Energy Type1="1" Type2="5">8.0</Energy>
      <Energy Type1="1" Type2="6">20.0</Energy>
      <Energy Type1="1" Type2="7">8.0</Energy>
      <Energy Type1="1" Type2="8">20.0</Energy>
      <Energy Type1="1" Type2="9">8.0</Energy>
      <Energy Type1="1" Type2="10">8.0</Energy>
      <Energy Type1="2" Type2="2">8.0</Energy>
      <Energy Type1="2" Type2="3">20.0</Energy>
      <Energy Type1="2" Type2="4">8.0</Energy>
      <Energy Type1="2" Type2="5">20.0</Energy>
      <Energy Type1="2" Type2="6">8.0</Energy>
      <Energy Type1="2" Type2="7">20.0</Energy>
      <Energy Type1="2" Type2="8">8.0</Energy>
      <Energy Type1="2" Type2="9">8.0</Energy>
      <Energy Type1="2" Type2="10">8.0</Energy>
      <Energy Type1="3" Type2="3">8.0</Energy>
      <Energy Type1="3" Type2="4">20.0</Energy>
      <Energy Type1="3" Type2="5">8.0</Energy>
      <Energy Type1="3" Type2="6">20.0</Energy>
      <Energy Type1="3" Type2="7">8.0</Energy>
      <Energy Type1="3" Type2="8">20.0</Energy>
      <Energy Type1="3" Type2="9">8.0</Energy>
      <Energy Type1="3" Type2="10">8.0</Energy>
      <Energy Type1="4" Type2="4">8.0</Energy>
      <Energy Type1="4" Type2="5">20.0</Energy>
      <Energy Type1="4" Type2="6">8.0</Energy>
      <Energy Type1="4" Type2="7">20.0</Energy>
      <Energy Type1="4" Type2="8">8.0</Energy>
      <Energy Type1="4" Type2="9">8.0</Energy>
      <Energy Type1="4" Type2="10">8.0</Energy>
      <Energy Type1="5" Type2="5">8.0</Energy>
      <Energy Type1="5" Type2="6">20.0</Energy>
      <Energy Type1="5" Type2="7">8.0</Energy>
      <Energy Type1="5" Type2="8">20.0</Energy>
      <Energy Type1="5" Type2="9">8.0</Energy>
      <Energy Type1="5" Type2="10">8.0</Energy>
      <Energy Type1="6" Type2="6">8.0</Energy>
      <Energy Type1="6" Type2="7">20.0</Energy>
      <Energy Type1="6" Type2="8">8.0</Energy>
      <Energy Type1="6" Type2="9">8.0</Energy>
      <Energy Type1="6" Type2="10">8.0</Energy>
      <Energy Type1="7" Type2="7">8.0</Energy>
      <Energy Type1="7" Type2="8">20.0</Energy>
      <Energy Type1="7" Type2="9">8.0</Energy>
      <Energy Type1="7" Type2="10">8.0</Energy>
      <Energy Type1="8" Type2="8">8.0</Energy>
      <Energy Type1="8" Type2="9">8.0</Energy>
      <Energy Type1="8" Type2="10">8.0</Energy>
      <Energy Type1="9" Type2="9">8.0</Energy>
      <Energy Type1="9" Type2="10">8.0</Energy>
      <Energy Type1="10" Type2="10">8.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Steppable Type="PIFInitializer">
      
      <!-- Initial layout of cells using PIFF file. Piff files can be generated using PIFGEnerator -->
      <PIFName>Simulation/Competition.piff</PIFName>
   </Steppable>
   
   <Steppable Frequency="100" Type="PIFDumper">
      
      <!-- Periodically stores cell layout configuration in a piff format -->
      <PIFName>Competition</PIFName>
      <PIFFileExtension>piff</PIFFileExtension>
   </Steppable>
</CompuCell3D>
